PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = project
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine Welcome
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    TextComponent text
      letterHeight = 0.05
      pos = (0, .1)
      startVal [time (s)] = 0.0
      text = Please don't move or blink
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        If you ready, press [space bar]
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        pressed_trials = set()
  Routine Ending
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    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text = Thnakyou for coming
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  Routine end_block
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    CodeComponent code_3
      Code Type = Auto->JS
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      Each Frame:
        thisExp.addData('pressed_trials', str(pressed_trials))
        print("Pressed trials:", pressed_trials)
        print("Data file will be saved to:", thisExp.dataFileName)
    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Endding block
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  Routine trial_ex
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    PolygonComponent cross
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 1
      stopVal [duration (s)] = $block
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    ImageComponent faces
      image [set every repeat] = $image
      size = (0.5, 0.5)
      startVal [time (s)] = 2
      stopVal [duration (s)] = 2
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    KeyboardComponent response
      allowedKeys = 'space'
      forceEndRoutine = False
      startVal [time (s)] = 2
      stopVal [duration (s)] = 2
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    CodeComponent code_2
      Code Type = Py
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      Each Frame:
        #print(f"Trial {trial} — keys: {response.keys}")
        #
        if response.keys and 'space' in response.keys:
            pressed_trials.add(trial)
Flow
  Routine Welcome
  LoopInitiator trial_loop loopType="TrialHandler"
    conditionsFile = blocks/block1.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('block', 1), ('trial', 1), ('image', 'faces/unknown/unknown_48.jpg'), ('type', 'unknown')]),
      OrderedDict([('block', 1), ('trial', 2), ('image', 'faces/unknown/unknown_174.jpg'), ('type', 'unknown')]),
      OrderedDict([('block', 1), ('trial', 3), ('image', 'faces/unknown/unknown_66.jpg'), ('type', 'unknown')]),
      OrderedDict([('block', 1), ('trial', 4), ('image', 'faces/unknown/unknown_267.jpg'), ('type', 'unknown')]),
      OrderedDict([('block', 1), ('trial', 5), ('image', 'faces/unknown/unknown_210.jpg'), ('type', 'unknown')]),
      OrderedDict([('block', 1), ('trial', 6), ('image', 'faces/unknown/unknown_132.jpg'), ('type', 'unknown')]),
      OrderedDict([('block', 1), ('trial', 7), ('image', 'faces/unknown/unknown_26.jpg'), ('type', 'unknown')]),
      OrderedDict([('block', 1), ('trial', 8), ('image', 'faces/unknown/unknown_8.jpg'), ('type', 'unknown')]),
      OrderedDict([('block', 1), ('trial', 9), ('image', 'faces/unknown/unknown_68.jpg'), ('type', 'unknown')]),
      OrderedDict([('block', 1), ('trial', 10), ('image', 'faces/unknown/unknown_44.jpg'), ('type', 'unknown')]),
      OrderedDict([('block', 1), ('trial', 11), ('image', 'faces/unknown/unknown_128.jpg'), ('type', 'unknown')]),
      OrderedDict([('block', 1), ('trial', 12), ('image', 'faces/unknown/unknown_156.jpg'), ('type', 'unknown')]),
      OrderedDict([('block', 1), ('trial', 13), ('image', 'faces/unknown/unknown_203.jpg'), ('type', 'unknown')]),
      OrderedDict([('block', 1), ('trial', 14), ('image', 'faces/unknown/unknown_28.jpg'), ('type', 'unknown')])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
    Routine trial_ex
  LoopTerminator trial_loop
  Routine end_block
